PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1440, 900]
  expName = spatial_frequency
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
      Begin Routine:
        outlet.push_sample([id], time.time())
      Each Frame:
        #if frameN<10:
        #    outlet.push_sample([id], time.time())
            # stimulus onsets
        #    outlet.push_sample([id], time.time())
      End Routine:
        outlet.push_sample([-1], time.time())
        #time.sleep(.5)
    GratingComponent grating
      mask = circle
      opacity [set every repeat] = $opacity
      ori [set every repeat] = $orientation
      phase = 0
      sf [set every repeat] = $sfreq
      size = .7
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      tex = sin
      texture resolution = 512
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  Routine finish
    TextComponent finish_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      units = norm
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      text:
        This is the end.

        End the Marker Streaming now and then press any key to leave.
    KeyboardComponent finish_press
      allowedKeys = 'y','n','left','right','space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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  Routine start
    CodeComponent streaming
      Code Type = Py
      Begin Experiment:
        import time
        from pylsl import StreamInfo, StreamOutlet

        info = StreamInfo('Ganglion_EEG', 'Markers', 1, 0.0, 'int32','marker')
        outlet = StreamOutlet(info)

        outlet.push_sample([-1], time.time())
    TextComponent start_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press <up> to begin.
      units = norm
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    KeyboardComponent start_press
      allowedKeys = 'up'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine iti
    TextComponent crosshair
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = +
      units = height
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Flow
  Routine start
  LoopInitiator ddd loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 1
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = design_sf.csv
      loopType = random
      nReps = 50
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      conditions:
        [OrderedDict([('id', 1), ('orientation', 0), ('sfreq', 3), ('opacity', 1)]),
        OrderedDict([('id', 2), ('orientation', 0), ('sfreq', 12), ('opacity', 1)]),
        OrderedDict([('id', 3), ('orientation', 0), ('sfreq', 6), ('opacity', 0)])]
      Routine trial
      Routine iti
    LoopTerminator trials
    Routine finish
  LoopTerminator ddd
  Routine finish
